//execute1("celltypes.element(\"Pyr1\")")

begintemplate Pyr1
public init, topol, basic_shape, subsets, geom, biophys, geom_nseg, biophys_inhomo
public synlist, x, y, z, position, connect2target

public soma, dend
public all, somatic, basal

objref synlist

proc init() {
  topol()
  subsets()
  geom()
  biophys()
  geom_nseg()
  synlist = new List()
  synapses()
  x = y = z = 0 // only change via position
}

create soma, dend[37]

proc topol() { local i
  connect dend(0), soma(0.5)
  for i = 1, 2 connect dend[i](0), dend[i-1](1)
  connect dend[3](0), dend[1](1)
  for i = 4, 5 connect dend[i](0), dend[3](1)
  connect dend[6](0), dend(1)
  for i = 7, 9 connect dend[i](0), dend[i-1](1)
  connect dend[10](0), dend[8](1)
  connect dend[11](0), dend[7](1)
  connect dend[12](0), dend[6](1)
  for i = 13, 14 connect dend[i](0), dend[12](1)
  connect dend[15](0), soma(0.5)
  for i = 16, 17 connect dend[i](0), dend[i-1](1)
  connect dend[18](0), dend[16](1)
  for i = 19, 20 connect dend[i](0), dend[i-1](1)
  connect dend[21](0), dend[19](1)
  connect dend[22](0), dend[18](1)
  connect dend[23](0), dend[15](1)
  for i = 24, 25 connect dend[i](0), dend[23](1)
  for i = 26, 27 connect dend[i](0), dend[i-1](1)
  connect dend[28](0), dend[26](1)
  connect dend[29](0), dend[25](1)
  connect dend[30](0), soma(0.5)
  for i = 31, 32 connect dend[i](0), dend[30](1)
  for i = 33, 34 connect dend[i](0), dend[32](1)
  for i = 35, 36 connect dend[i](0), dend[34](1)
  basic_shape()
}
proc shape3d_1() {
  soma {pt3dclear()
	pt3dadd(0.90524, -4.17, -68.84, 15.5295)
	pt3dadd(8.67, -4.17, -68.84, 15.5295)
	pt3dadd(16.4348, -4.17, -68.84, 15.5295)
  }
  dend {pt3dclear()
	pt3dstyle(1, 8.67, -4.17, -68.84)
	pt3dadd(13.35, -12.64, -74.98, 2.76)
	pt3dadd(15.74, -15.96, -74.98, 2.76)
	pt3dadd(16.29, -16.69, -74.98, 2.76)
  }
  dend[1] {pt3dclear()
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  }
}
proc shape3d_2() {
  dend[12] {	pt3dadd(61.49, -27.01, -82.55, 1.84)
	pt3dadd(65.53, -27.75, -82.55, 1.84)
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  }
}
proc shape3d_3() {
  dend[24] {	pt3dadd(-92.71, -23.93, -86.95, 1.1)
	pt3dadd(-95.47, -27.61, -82.25, 1.1)
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  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
}

objref all, somatic, basal
proc subsets() { local i
  objref all, somatic, basal
  all = new SectionList()
    soma all.append()
    for i=0, 36 dend[i] all.append()

  somatic = new SectionList()
    soma somatic.append()

  basal = new SectionList()
    for i=0, 36 dend[i] basal.append()

}
proc geom() {
}
external lambda_f
proc geom_nseg() {
}
proc biophys() {
}
proc biophys_inhomo(){}
proc position() { local i
  soma for i = 0, n3d()-1 {
    pt3dchange(i, $1-x+x3d(i), $2-y+y3d(i), $3-z+z3d(i), diam3d(i))
  }
  x = $1  y = $2  z = $3
}
obfunc connect2target() { localobj nc //$o1 target point process, optional $o2 returned NetCon
  soma nc = new NetCon(&v(1), $o1)
  nc.threshold = 10
  if (numarg() == 2) { $o2 = nc } // for backward compatibility
  return nc
}
proc synapses() {}
endtemplate Pyr1
